'CR300/CR310
'Created by Short Cut (4.4)

'Declare Variables and Units
Public BattV
Public PTemp_C
Public CVData(14)
Public SlrTF_MJ
Public CVMeta As String * 40
Public WSPrev
Public WindDirPrev
Public MaxWSprev
Public Invalid_Wind As Long
Public FTPResult

Alias CVData(1)=SlrFD_W
Alias CVData(2)=Rain_mm
Alias CVData(3)=Strikes
Alias CVData(4)=Dist_km
Alias CVData(5)=WS_ms
Alias CVData(6)=WindDir
Alias CVData(7)=MaxWS_ms
Alias CVData(8)=AirT_C
Alias CVData(9)=VP_mbar
Alias CVData(10)=BP_mbar
Alias CVData(11)=RH
Alias CVData(12)=RHT_C
Alias CVData(13)=TiltNS_deg
Alias CVData(14)=TiltWE_deg

Units BattV=Volts
Units PTemp_C=Deg C
Units SlrTF_MJ=MJ/m^2
Units SlrFD_W=W/m^2
Units Rain_mm=mm
Units Strikes=count
Units Dist_km=kilometers
Units WS_ms=meters/second
Units WindDir=degrees
Units MaxWS_ms=meters/second
Units AirT_C=Deg C
Units VP_mbar=mbar
Units BP_mbar=mbar
Units RH=%
Units RHT_C=Deg C
Units TiltNS_deg=degrees
Units TiltWE_deg=degrees

'Define Data Tables
DataTable(Table1,True,-1)
	DataInterval(0,60,Min,10)
	Sample(1,BattV,FP2)
	Minimum(1,BattV,FP2,False,False)
	Sample(1,SlrFD_W,FP2)
	Totalize(1,Strikes,FP2,False)
	Sample(1,WS_ms,FP2)
	Sample(1,WindDir,FP2)
	Sample(1,MaxWS_ms,FP2)
	Sample(1,AirT_C,FP2)
	Maximum(1,AirT_C,FP2,False,False)
	Minimum(1,AirT_C,FP2,False,False)
	Sample(1,VP_mbar,IEEE4)
	Sample(1,BP_mbar,IEEE4)
	Sample(1,RH,FP2)
	Sample(1,RHT_C,FP2)
	Sample(1,TiltNS_deg,FP2)
	Sample(1,TiltWE_deg,FP2)
	Totalize(1,SlrTF_MJ,IEEE4,False)
	Sample(1,CVMeta,STRING)
	Sample(1,Invalid_Wind,FP2)
EndTable

'Main Program
BeginProg
	'Main Scan
	Scan(60,Sec,1,0)
		'Default CR300 Datalogger Battery Voltage measurement 'BattV'
		Battery(BattV)
		'Default CR300 Datalogger Processor Temperature measurement 'PTemp_C'
		PanelTemp(PTemp_C,50)
		'Get ClimaVUE50 Compact Digital Weather Sensor metadata 'CVMeta' every day at midnight in case sensor is swapped or OS is updated
		If IfTime(0,1,Day) Then
			SDI12Recorder(CVMeta,C1,"0","I!",1,0)
		EndIf
		'ClimaVUE50 Compact Digital Weather Sensor measurements
		'SlrFD_W', 'Rain_mm', 'Strikes', 'Dist_km', 'WS_ms', 'WindDir',
		'MaxWS_ms', 'AirT_C', 'VP_mbar', BP_mbar', 'RH', 'RHT_C',
		'TiltNS_deg', and 'TiltWE_deg'
		'Get data from ClimaVUE50 Compact Digital Weather Sensor
		SDI12Recorder(CVData(),C1,"0","R7!",1,0,-1)
		'Correct barometric pressure in kPa to sea level
		BP_mbar=BP_mbar+12.21129
		'Convert fractional relative humidity into percent relative humidity
		RH=RH*100
		'Calculate total solar flux in MJ/m^2 from flux density in W/m^2
		'The multiplier to calculate total flux was calculated by Short Cut
		'and based on a program execution rate (scan rate) of 60 Seconds.
		'If you change the program execution rate outside of Short Cut with the CRBasic Editor
		'you will need to recalculate this multiplier. See the sensor manual for more details.
		SlrTF_MJ=SlrFD_W*6E-05
		'Convert vapor pressure in kPa to mbar
		VP_mbar=VP_mbar*10
		'Convert barometric pressure in kPa to mbar
		BP_mbar=BP_mbar*10
		'High winds with rain can temporarily interfere with sonic wind measurements causing the sensor to output -9999 or -9990. The following instructions set invalid wind measurements
		'to the previous valid wind measurements. This will 'flat-line' the measurements until the sensor is able to make good readings again. The Invalid_Wind variable will be set to 1 when
		'a wind measurement is invalid. For troubleshooting purposes, it is highly recommended that you totalize the Invalid_Wind variable in any output tables you define that include
		'wind speed and/or direction data from the ClimaVUE50.
		If WS_ms<0 Then
			WS_ms=WSPrev
			WindDir=WindDirPrev
			MaxWS_ms=MaxWSprev
			Invalid_Wind=1
		Else
			WSPrev=WS_ms
			WindDirPrev=WindDir
			MaxWSprev=MaxWS_ms
			Invalid_Wind=0
		EndIf
		'Call Data Tables and Store Data
		CallTable Table1
	NextScan
	

SlowSequence
Scan(60,Min, 3,0)
  FTPResult=FTPClient("ftp_adress:21", "user", "pass", "Table1", "station_meteo_lauvitel/data.csv", 19, 0, 0, Min, -1008)
NextScan
 
 
EndProg
